
load_file("nrngui.hoc")

load_file("../DCN_simulation.hoc")

inhibitoryHz = 0
excitatoryHz = 0

load_file("../DCN_morph.hoc")
load_file("../DCN_mechs.hoc")


{celsius = 37.0}

access soma

objectvar stim0


{
    stim0 = new IClamp(0.5) 
    stim0.del = 500.0
    stim0.dur = 500.0
    stim0.amp = 0.2
}


tstop = 1500.0
dt = 0.025
steps_per_ms = 40.0


objref Soma_CML_v
Soma_CML_v = new Graph(0)
{Soma_CML_v.size(0, tstop,-70.0,20.0)}
{Soma_CML_v.view(0, -70.0, tstop, 90.0, 80, 330, 330, 250)}
{
    Soma_CML_v.addexpr("soma.v", "soma.v(0.5)", 1, 1, 0.8, 0.9, 2)
    graphList[0].append(Soma_CML_v)
}

objref v_time
objref f_time
objref propsFile

v_time = new Vector()
{ v_time.record(&t) }
{ v_time.resize(200001) }
f_time = new File()


objref v_Soma
{ v_Soma = new Vector() }
{ v_Soma.record(&soma.v(0.5))}
{ v_Soma.resize(200001) }

objref f_Soma


print "Starting simulation of duration ",tstop,"ms"

{cvode.active(1)}
{cvode.atol(1.0E-5)}
{run()}

print "Finished simulation"

f_Soma = new File()
strdef filename
filename = "Soma.dat"
f_Soma.wopen(filename)
v_Soma.printf(f_Soma)
f_Soma.close()
